PsychoPy2experiment version="3.0.0b1"
Settings
  expName = choiceRTT
  Experiment info = {'participant': '', 'condition': '1'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  Units = norm
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Routines
  Routine main
    ImageComponent targImage
      startVal [time (s)] = 0
      units = norm
      size = (2,2)
      image [set every repeat] = $stimulus
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    TextComponent text
      startVal [time (s)] = 0.0
      color = black
      pos = (0, -0.88)
      text = 1   2   3   4   5   6   7
      letterHeight = 0.05
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    KeyboardComponent response
      allowedKeys = '1','2','3','4','5','6','7'
      store = first key
      forceEndRoutine = True
      correctAns = $corrAns
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  Routine instructions
    ImageComponent image
      startVal [time (s)] = 0.0
      size = (2, 2)
      image = "guidance1_"+$expInfo['condition']+".png"
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    KeyboardComponent startInst
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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    TextComponent text_2
      startVal [time (s)] = 0.0
      color = black
      pos = (0, -0.8)
      text = 按任意键继续
      letterHeight = 0.1
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  Routine thanks
    ImageComponent image_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      size = (2, 2)
      image = "guidance5_"+$expInfo['condition']+".png"
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    nReps = 1
    conditionsFile = $expInfo['condition']+".xlsx"
    loopType = sequential
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    Routine main
  LoopTerminator trials
  Routine thanks
